PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Font_Memory_Experiment
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    TextComponent text_2
      font [set every repeat] = $fonts
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text [set every repeat]:
        $str(wordlist)
  Routine delay
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Please wait for a moment before recalling the words.
    StaticComponent ISI
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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  Routine recall
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60.0
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      text:
        Type as many words as you remember in 60 seconds
        Press the SPACE BAR to continue with the next word.
    TextboxComponent textbox
      alignment = bottom-center
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'space','enter'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine welcome
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!
        You will see words displayed one by one.
        Your task is to memorize as many words as possible.
    KeyboardComponent key_resp_3
      allowedKeys = 'return','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine welcome
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = fontexcel.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('wordlist', 'Apple'), ('fonts', 'Arial'), ('condition', 'Easy')]),
      OrderedDict([('wordlist', 'Table'), ('fonts', 'Times New Roman'), ('condition', 'Easy')]),
      OrderedDict([('wordlist', 'Chair'), ('fonts', 'Times New Roman'), ('condition', 'Easy')]),
      OrderedDict([('wordlist', 'House'), ('fonts', 'Comic Sans MS'), ('condition', 'Easy')]),
      OrderedDict([('wordlist', 'Bread'), ('fonts', 'Arial'), ('condition', 'Easy')]),
      OrderedDict([('wordlist', 'Water'), ('fonts', 'Arial'), ('condition', 'Easy')]),
      OrderedDict([('wordlist', 'Window'), ('fonts', 'Times New Roman'), ('condition', 'Easy')]),
      OrderedDict([('wordlist', 'Garden'), ('fonts', 'Comic Sans MS'), ('condition', 'Easy')]),
      OrderedDict([('wordlist', 'Pencil'), ('fonts', 'Arial'), ('condition', 'Easy')]),
      OrderedDict([('wordlist', 'School'), ('fonts', 'Comic Sans MS'), ('condition', 'Easy')]),
      OrderedDict([('wordlist', 'Elephant'), ('fonts', 'Brush Script MT'), ('condition', 'Difficult')]),
      OrderedDict([('wordlist', 'Courage'), ('fonts', 'Lucida Handwriting'), ('condition', 'Difficult')]),
      OrderedDict([('wordlist', 'Telescope'), ('fonts', 'Brush Script MT'), ('condition', 'Difficult')]),
      OrderedDict([('wordlist', 'Dinosaur'), ('fonts', 'Lucida Handwriting'), ('condition', 'Difficult')]),
      OrderedDict([('wordlist', 'Notebook'), ('fonts', 'Brush Script MT'), ('condition', 'Difficult')]),
      OrderedDict([('wordlist', 'Triangle'), ('fonts', 'Lucida Handwriting'), ('condition', 'Difficult')])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
    Routine trial
  LoopTerminator trials
  Routine delay
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 20
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    Routine recall
  LoopTerminator trials_2
